
xopen("DGC_tests_na8st.hoc")

proc main() { local i, ij, gid strdef cmd, local_forest_path, local_results_path
    
    load_file ("DGC_test_from_forest_config.hoc")
    
    parallelizer (ncells)
    
    print "pc.nhost = ", pc.nhost
    
    sprint (local_forest_path, "%s/%03d", forest_path, pc.id)
    sprint (local_results_path, "%s/%03d", results_path, pc.id)
    
    sprint(cmd, "mkdir -p %s", local_results_path)
    system(cmd)
    
    for pcitr(&i, &ij, &gid, 0, ncells-1) {
        
        print "i = ", i, "ij = ", ij, "gid = ", gid
        
        passive_test (local_forest_path, local_results_path, gid)
        single_ap_test (local_forest_path, local_results_path, gid)
        ap_rate_test (local_forest_path, local_results_path, gid)
        
    }

    pc.barrier()
    quit()
}

main()

